PsychoPy2experiment version="2024.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = ViLoN_Posner_Cueing
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent Fixation_Point
      fillColor = white
      shape = cross
      size = (25, 25)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent Cue
      fillColor = white
      pos = [80, 0]
      shape = circle
      size = [25, 25]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.15
      units = deg
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    GratingComponent Gabor
      mask = circle
      pos = [80,0]
      sf = [0.25]
      size = [25, 25]
      startVal [time (s)] = 1.50
      stopVal [duration (s)] = 1.0
      tex = sin
      units = deg
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    KeyboardComponent key_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 1.50
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 2.65
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      text:
        Were the lines up and down or side to side?

        Press 'u' for up and down

        Press 's' for side to side
Flow
  LoopInitiator Trial_Rep loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine trial
  LoopTerminator Trial_Rep
